PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 3.0.5
  Window size (pixels) = [1440, 900]
  color = white
  expName = ec_RRR
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Routines
  Routine trial
    KeyboardComponent learning_phase_response
      allowedKeys = 'space', 'None'
      correctAns = $correct_response
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    ImageComponent learning_phase_image
      image [set every repeat] = $stimulus
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine instructions
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from numpy.random import randint
        condition_randomisation = randint(1, 3, size = 1)
        if condition_randomisation == 1:
            condition = "CS1_USpos"
        elif condition_randomisation == 2:
            condition = "CS1_USneg"
        file_name = "trials/trials_participant_" + str(expInfo['participant']) + "_condition_" + condition + ".csv"
    KeyboardComponent key_resp_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instructions
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = [instructions]
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Flow
  Routine instructions
  LoopInitiator block_1 loopType="TrialHandler"
    Selected rows = $range(1, 87, 1)
    conditionsFile = $file_name
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator block_1
  Routine instructions
  LoopInitiator block_2 loopType="TrialHandler"
    Selected rows = $range(87, 173, 1)
    conditionsFile = $file_name
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator block_2
  Routine instructions
  LoopInitiator block_3 loopType="TrialHandler"
    Selected rows = $range(173, 259, 1)
    conditionsFile = $file_name
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator block_3
  Routine instructions
  LoopInitiator block_4 loopType="TrialHandler"
    Selected rows = $range(259, 345, 1)
    conditionsFile = $file_name
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator block_4
  Routine instructions
  LoopInitiator block_5 loopType="TrialHandler"
    Selected rows = $range(345, 431, 1)
    conditionsFile = $file_name
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator block_5
